<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>RenderConfig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1920</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>true</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>BluePlaid</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Assets\Textures\plaid_blue.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>ColorDots</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Assets\Textures\Camilo.jpg</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>Reward</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Assets\Textures\CamiloReward.jpg</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Eye>
              <NearClip>1E-05</NearClip>
              <FarClip>1000</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw3DStim</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderCubemap">
                <gl:RenderState />
                <gl:ClearColor>DimGray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:FaceSize xsi:nil="true" />
                <gl:InternalFormat>Rgb</gl:InternalFormat>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="IntrinsicsFileName" DisplayName="BackIntrinsics" Category="Back Screen" />
              <Property Name="ExtrinsicsFileName" DisplayName="BackExtrinsics" Category="Back Screen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ScreenCalibration.bonsai">
              <IntrinsicsFileName>Calibration\right_intrinsics.yml</IntrinsicsFileName>
              <ExtrinsicsFileName>Calibration\right_extrinsics.yml</ExtrinsicsFileName>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MonitorView</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Width" Selector="DisplayWidth" />
                      <Property Name="Height" Selector="DisplayHeight" />
                      <Property Name="Rotation" Selector="Rotation" />
                      <Property Name="Translation" Selector="Translation" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>0.543744</Width>
                    <Height>0.302616</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0.1</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" />
                    <Property Name="Y" />
                    <Property Name="Width" />
                    <Property Name="Height" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0</X>
                    <Y>0</Y>
                    <Width>1</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PostDrawing</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PositionUpdates</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:KeyDown">
                <gli:Key>F2</gli:Key>
                <gli:Modifiers xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0.2</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0.2</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>ResetPosition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TeleportPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gli:MouseWheel" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>EventArgs.DeltaPrecise</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Gain" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>-0.025</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Z" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Z>0.025</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TeleportPosition</Name>
                  </Expression>
                  <Expression xsi:type="rx:Scan">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Accumulation</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Add" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TeleportPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="13" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0:0.####}</Format>
              <Selector>it.Z</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateRenderState">
                <gl:RenderState />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateViewportState">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Width>1</gl:Width>
                <gl:Height>1</gl:Height>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
              <Text>0.725</Text>
              <Font>Microsoft Sans Serif, 48pt</Font>
              <Alignment>Center</Alignment>
              <LineAlignment>Center</LineAlignment>
              <TextRenderingHint>AntiAliasGridFit</TextRenderingHint>
              <Color>
                <Val0>255</Val0>
                <Val1>255</Val1>
                <Val2>255</Val2>
                <Val3>255</Val3>
              </Color>
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0.95</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncQuad</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateRenderState">
                <gl:RenderState />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateViewportState">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Width>1</gl:Width>
                <gl:Height>1</gl:Height>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-8</Left>
              <Right>8</Right>
              <Bottom>-4.5</Bottom>
              <Top>4.5</Top>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.2</ExtentX>
              <ExtentY>0.2</ExtentY>
              <LocationX>7.9</LocationX>
              <LocationY>4.4</LocationY>
              <Layer>10</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EnvironmentDrawing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CorridorHeight" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CorridorWidth" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it.Item1 as Height,
it.Item2 as Width,
it.Item1 * 0.5 as HeightOffset,
it.Item2 * 0.5 as WidthOffset)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CorridorSpecs</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>DrawSegment</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Start" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Stop" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Visible" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Segment</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TextureLeft" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:BindTexture,sys:String">
                    <MemberName>TextureName</MemberName>
                    <Value>Reward</Value>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TextureRight" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:BindTexture,sys:String">
                    <MemberName>TextureName</MemberName>
                    <Value>ColorDots</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
it.Item1 as Name,
it.Item2 as Visible,
it.Item3.Item1 as Start,
it.Item3.Item2 as Stop,
it.Item3.Item2 - it.Item3.Item1 as Length,
(0.5 * (it.Item3.Item2 - it.Item3.Item1)) + it.Item3.Item1  as Center,
new(
  it.Item4.Item1 as Left,
  it.Item4.Item2 as Right) as Textures)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SegmentSpecs</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawWall.bonsai">
                    <IsRightWall>true</IsRightWall>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawWall.bonsai">
                    <IsRightWall>false</IsRightWall>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="14" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="14" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source4" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>DrawSegment</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Start" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1.5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Stop" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>3.5</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Visible" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Segment</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TextureLeft" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:BindTexture,sys:String">
                    <MemberName>TextureName</MemberName>
                    <Value>Reward</Value>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TextureRight" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:BindTexture,sys:String">
                    <MemberName>TextureName</MemberName>
                    <Value>ColorDots</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
it.Item1 as Name,
it.Item2 as Visible,
it.Item3.Item1 as Start,
it.Item3.Item2 as Stop,
it.Item3.Item2 - it.Item3.Item1 as Length,
(0.5 * (it.Item3.Item2 - it.Item3.Item1)) + it.Item3.Item1  as Center,
new(
  it.Item4.Item1 as Left,
  it.Item4.Item2 as Right) as Textures)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SegmentSpecs</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawWall.bonsai">
                    <IsRightWall>true</IsRightWall>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawWall.bonsai">
                    <IsRightWall>false</IsRightWall>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="14" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="14" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source4" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>